---
API: 3
OpenSesame: 4.1.22
Platform: posix
---
set width 1920
set uniform_coordinates yes
set title "Eye Tracking Demo Titta"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground "#ffffff"
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/home/bob/git/opensesame-plugin-titta_eyetracking/demo_experiment"
set disable_garbage_collection False
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#808080"

define notepad README
	__note__
	Simple demo eye tracking experiment for the Titta OpenSesame plugin.
	
	This experiment has stimuli in two resolutions: 1920x1080 and 3840x2160.
	
	By default it starts in dummy mode. To connect to a Tobii eye tracker, uncheck dummy mode in the 'titta_init' item and select the correct eye tracker.
	
	The plugin can plot the gaze on the operator screen and on the stimulus screen. By default, the operator screen is disabled and the experiment starts with the question if you want to plot the gaze on the stimulus screen. In dummy mode, it plots the gaze in a circulair motion to demonstrate the appearance of the gaze. With dummy mode disabled, it plots the gaze from the Tobii in realtime. To use the operator screen you have to check the options in the 'titta_init' item and 'titta_plot_gaze' item.
	
	The pictures used and data generated by this demo are directly compatible with the demo analysis of the titta toolbox: 
	
	https://github.com/marcus-nystrom/Titta
	
	Just extract the jpg files from the file pool and put them in the 'stimuli' folder. Put the data files in the 'data' folder. 
	The 'titta_onset_stim' and 'titta_offset_stim' items in the demo are used to send the stimulus marker to the eye tracker. 
	
	
	Version: 1.2
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad calibrate_question
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="Do you want to calibrate? Y/N<br />" x=0 y=0 z_index=0

define keyboard_response calibrate_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y;n"

define sketchpad done
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="Done!" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run README True
	run system_information True
	run titta_init True
	run gaze_question True
	run gaze_response True
	run calibrate_question True
	run calibrate_response True
	run titta_calibrate "response_calibrate_response == \"y\""
	run welcome True
	run titta_start_recording True
	run experimental_block1 True
	run experimental_block2 True
	run titta_stop_recording True
	run titta_save_data True
	run done True

define loop experimental_block1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 stim balls11
	setcycle 1 stim balls12
	setcycle 2 stim balls13
	setcycle 3 stim balls21
	setcycle 4 stim balls22
	setcycle 5 stim balls23
	setcycle 6 stim balls31
	setcycle 7 stim balls32
	setcycle 8 stim balls33
	run main_task

define loop experimental_block2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stim stim1
	setcycle 1 stim stim2
	run main_task

define sketchpad fix_cross
	set duration 0
	set description "Displays stimuli"
	draw line color="#ffffff" penwidth=6 show_if=True x1=0 x2=0 y1=-24 y2=24 z_index=0
	draw line color="#ffffff" penwidth=6 show_if=True x1=-24 x2=24 y1=0 y2=0 z_index=0

define advanced_delay fix_duration
	set jitter_mode Uniform
	set jitter 0
	set duration 1000
	set description "Waits for a specified duration"

define sketchpad gaze_question
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="Do want to show gaze plot? Y/N<br />" x=0 y=0 z_index=0

define keyboard_response gaze_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y;n"

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sequence main_task
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run stim_name True
	run fix_cross True
	run titta_fix_on True
	run fix_duration True
	run stimulus True
	run titta_fix_off True
	run titta_onset_stim True
	run titta_plot_gaze "response_gaze_response == \"y\""
	run keyboard_response "response_gaze_response == \"n\""
	run titta_offset_stim True
	run logger True

define inline_script stim_name
	set description "Executes Python code"
	set _run ""
	___prepare__
	file_name_stim = f"{stim}_{width}x{height}.jpg"
	__end__

define sketchpad stimulus
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="{file_name_stim}" scale=1 show_if=True x=0 y=0 z_index=0

define inline_script system_information
	set description "Executes Python code"
	set _run ""
	___prepare__
	import os
	import platform
	import sys
	import subprocess, shlex
	
	def run(cmd, check=True):
	    """
	    Run a system command safely and return (exit_code, stdout, stderr).
	    Automatically detects if shell=True is needed (for $, pipes, redirects, etc.).
	    Raises RuntimeError if the command fails (check=True).
	    """
	    shell = isinstance(cmd, str) and any(x in cmd for x in "$|><*&;~")
	    if isinstance(cmd, str) and not shell:
	        cmd = shlex.split(cmd)
	    r = subprocess.run(cmd, shell=shell, capture_output=True, text=True)
	    if check and r.returncode != 0:
	        raise RuntimeError(f"Command failed ({r.returncode}): {cmd}\n{r.stderr.strip()}")
	    return r.returncode, r.stdout.strip(), r.stderr.strip()
	
	
	def get_os_build():
	    """
	    Return the OS build number as text, e.g. '22631' for Windows 11 23H2.
	    Windows only, empty for other systems.
	    """
	    if platform.system() != "Windows":
	        return ""
	    try:
	        return str(sys.getwindowsversion().build)
	    except Exception:
	        # platform.version() is e.g. '10.0.22631'
	        return platform.version().split(".")[-1]
	
	
	def get_os_version():
	    """
	    Return a human-readable OS version.
	    Works for Linux, Windows, and macOS.
	    """
	    system = platform.system()
	    if system == "Linux":
	        try:
	            with open("/etc/os-release") as f:
	                lines = f.readlines()
	            info = {}
	            for line in lines:
	                if "=" in line:
	                    k, v = line.strip().split("=", 1)
	                    info[k] = v.strip('"')
	            name = info.get("PRETTY_NAME") or info.get("NAME", "Linux")
	        except Exception:
	            name = "Linux"
	        return name
	    elif system == "Windows":
	        # Windows 11 still reports itself as Windows 10 in platform.release() (older Python
	        # versions) and in the ProductName registry key; the build number is the reliable
	        # distinction. Local variable on purpose: OpenSesame logs global variables of a script.
	        windows_11_first_build = 22000
	        release = platform.release()
	        build = get_os_build()
	        if build.isdigit() and release == "10" and int(build) >= windows_11_first_build:
	            release = "11"
	        edition = platform.win32_edition() if hasattr(platform, "win32_edition") else ""
	        return f"{system} {release} {edition}".strip()
	    elif system == "Darwin":
	        ver, _, _ = platform.mac_ver()
	        return f"macOS {ver}"
	    else:
	        return system
	
	
	# -------------------------
	# Main script
	# -------------------------
	system = platform.system()
	
	if system in ["Linux", "Darwin", "Windows"]:
	    # Kernel version
	    if system != "Windows":
	        _, kernel, _ = run(["uname", "-r"])
	    else:
	        kernel = platform.version()  # NT kernel version, e.g. 10.0.22631
	    print(f"Kernel version: {kernel}")
	
	    # OS version and build number (build: Windows only)
	    os_version = get_os_version()
	    os_build = get_os_build()
	    print(f"OS version: {os_version}")
	    print(f"OS build: {os_build}")
	
	    # Session type (Linux only)
	    if system == "Linux":
	        session_type = os.environ.get("XDG_SESSION_TYPE", "unknown")
	        print(f"Session type: {session_type}")
	
	        # Optional shell check (commented out)
	        # _, session_check, _ = run("echo $XDG_SESSION_TYPE")
	        # print(f"(shell check) Session type: {session_check}")
	
	else:
	    print("Unsupported system detected.")
	__end__

define titta_calibrate titta_calibrate
	set description "Titta item to start calibration"

define titta_send_message titta_fix_off
	set message fix_off
	set description "Titta item to send a message to the Eye Tracker"

define titta_send_message titta_fix_on
	set message fix_on
	set description "Titta item to send a message to the Eye Tracker"

define titta_init titta_init
	set yres 1080
	set xres 1920
	set waitblanking no
	set verbose yes
	set tracking_mode Default
	set tracker_address ""
	set tracker "Tobii Pro Spectrum"
	set screen_nr 1
	set screen_name default
	set sampling_rate_manual no
	set sampling_rate ""
	set record_eye_images_during_calibration no
	set operator no
	set ncalibration_targets 5
	set headbox_manual no
	set head_box_center_z ""
	set head_box_center_y ""
	set head_box_center_x ""
	set eyeimage no
	set eye_image no
	set dummy_mode yes
	set description "Titta initialisation item"
	set calibration_pacing_interval 1
	set calibration_movement_duration 0.5
	set calibration_manual no
	set calibration_dot_size 30
	set calibration_dot "Thaler (default)"
	set calibration_auto_pace "Autoaccept (default)"
	set calibration_animate yes
	set bimonocular_calibration no

define titta_send_message titta_offset_stim
	set message "offset_{file_name_stim}"
	set description "Titta item to send a message to the Eye Tracker"

define titta_send_message titta_onset_stim
	set message "onset_{file_name_stim}"
	set description "Titta item to send a message to the Eye Tracker"

define titta_plot_gaze titta_plot_gaze
	set waitblanking_gaze yes
	set timeout infinite
	set stimulus_display yes
	set simulate_gaze yes
	set response_key space
	set operator_display no
	set disable_waitblanking_gaze no
	set description "Titta item to plot gaze"

define titta_save_data titta_save_data
	set tsv_export yes
	set description "Titta item to save data"

define titta_start_recording titta_start_recording
	set start_time_sync yes
	set start_positioning yes
	set start_notifications yes
	set start_gaze yes
	set start_eye_image no
	set start_external_signal yes
	set description "Titta item to start recording"
	set blocking_mode yes

define titta_stop_recording titta_stop_recording
	set stop_time_sync yes
	set stop_positioning yes
	set stop_notifications yes
	set stop_gaze yes
	set stop_eye_image no
	set stop_external_signal yes
	set description "Titta item to stop recording"

define sketchpad welcome
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="This demo will show some example trials.<br />Every trial will start with a fixation cross in the middle of the screen.<br />It will automatically continue to the visual stmulus after 1 second.<br />Press space when you are done and want to continue to the next trial. <br /><br /><br />Press space to continue<br /> <br />" x=-352 y=-96 z_index=0

